PsychoPy2experiment version="2023.1.3"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Info_measure_main_exp
  keyboardBackend = ioHub
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Routines
  Routine StimSetUp
    CodeComponent Ini_code
      Code Type = Auto->JS
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      Begin Experiment:
        # initialisations
        # timing
        fixation_cross_duration = 0.5
        image_duration = 0.15
        exit_message_duration = fixation_cross_duration + image_duration

        # feedback square height
        feedback_square_width = 0.03 # set in fractions of screen height

        # response feedback time
        response_feedback_time = 4

        # Set response size
        win_pix_x = (win.size[0]);
        win_pix_y = (win.size[1]);
        a = win_pix_y*0.75/6
        b = win_pix_y*0.75/3
        #print('Response width: ',a)
        #print('Response height: ',b)

        # trial number setup
        trialnumber = 0
        alltrials = 240
  Routine Startup
    CodeComponent Python_initialisation
      Code Type = Auto->JS
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      Begin Experiment:
        # VARIOUS INITIALISATIONS #

        # updated later in screen_scale to get mm values
        win_pix_x = (win.size[0]);
        win_pix_y = (win.size[1]);
  Routine patch_2
    PolygonComponent fixation_cross_2
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (30, 30)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $fixation_cross_duration
      units = pix
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    ImageComponent second_patch
      image [set every repeat] = $Patch_2_name
      size = (win_pix_y*0.75/3,win_pix_y*0.75/3)
      startVal [time (s)] = $fixation_cross_duration
      stopVal [duration (s)] = $image_duration
      units = pix
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    CodeComponent disable_mouse_2
      Code Type = JS
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      Begin JS Routine:
        // ADDED THIS SNIPPET TO MAKE THE MOUSE INVISIBLE
        document.body.style.cursor='none';
    TextComponent Esc_exit_17
      color = aqua
      letterHeight = 0.05
      pos = (0.75, -0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $exit_message_duration
      text = Press <Esc> to exit experiment
      units = norm
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  Routine patch_1
    PolygonComponent fixation_cross_1
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (30, 30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixation_cross_duration
      units = pix
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    ImageComponent first_patch
      image [set every repeat] = $Patch_1_name
      size = (win_pix_y*0.75/3,win_pix_y*0.75/3)
      startVal [time (s)] = $fixation_cross_duration
      stopVal [duration (s)] = $image_duration
      units = pix
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    CodeComponent disable_mouse
      Code Type = JS
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      Begin JS Routine:
        // ADDED THIS SNIPPET TO MAKE THE MOUSE INVISIBLE
        document.body.style.cursor='none';
    TextComponent Esc_exit_16
      color = aqua
      letterHeight = 0.05
      pos = (0.75, -0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $exit_message_duration
      text = Press <Esc> to exit experiment
      units = norm
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  Routine mask
    ImageComponent mask_image
      image [set every repeat] = $mask_name
      saveStartStop = False
      size = (win_pix_y*0.75/3,win_pix_y*0.75/3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.06
      units = pix
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    TextComponent Esc_exit_14
      color = aqua
      letterHeight = 0.05
      pos = (0.75, -0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.06
      text = Press <Esc> to exit experiment
      units = norm
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  Routine response
    MouseComponent mouse
      clickable = response1disk,response3disk,response5disk,response7disk
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        # Count trial numbers
        trialnumber =  trialnumber + 1;

        # text for indicating trial number
        trial_num_feedback = f'You have completed {trialnumber} of {alltrials} trials'
      End Routine:
        # Save similarity rating
        mousexpos=mouse.getPos()[0]  # get x position of mouse
        mouseypos=mouse.getPos()[1]  # get y position of mouse

        # Triangle 7
        x11d = a - b/2;
        y11d = a + b/2;
        x12d = a + b/2;
        y12d = a + b/2;
        x13d = a - b/2;
        y13d = a - b/2;
        a1d = ((y12d - y13d)*(mousexpos - x13d) + (x13d - x12d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        b1d = ((y13d - y11d)*(mousexpos - x13d) + (x11d - x13d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        c1d = 1 - a1d - b1d;

        # Triangle 6
        x21d = a - b/2;
        y21d = a - b/2
        x22d = a + b/2
        y22d = a + b/2
        x23d = a + b/2
        y23d = a - b/2
        a2d = ((y22d - y23d)*(mousexpos - x23d) + (x23d - x22d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        b2d = ((y23d - y21d)*(mousexpos - x23d) + (x21d - x23d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        c2d = 1 - a2d - b2d

        # Triangle 5
        x31d = a - b/2
        y31d = -(a - b/2)
        x32d = a + b/2
        y32d = -(a - b/2)
        x33d = a + b/2
        y33d = -(a + b/2)
        a3d = ((y32d - y33d)*(mousexpos - x33d) + (x33d - x32d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        b3d = ((y33d - y31d)*(mousexpos - x33d) + (x31d - x33d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        c3d = 1 - a3d - b3d


        # Triangle 4
        x41d = a - b/2
        y41d = -(a - b/2)
        x42d = a + b/2
        y42d = -(a + b/2)
        x43d = a - b/2
        y43d = -(a + b/2)
        a4d = ((y42d - y43d)*(mousexpos - x43d) + (x43d - x42d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        b4d = ((y43d - y41d)*(mousexpos - x43d) + (x41d - x43d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        c4d = 1 - a4d - b4d

        #  Triangle 3
        x51d = -(a + b/2)
        y51d = -(a + b/2)
        x52d = -(a - b/2)
        y52d = -(a - b/2)
        x53d = -(a - b/2)
        y53d = -(a + b/2)
        a5d = ((y52d - y53d)*(mousexpos - x53d) + (x53d - x52d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        b5d = ((y53d - y51d)*(mousexpos - x53d) + (x51d - x53d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        c5d = 1 - a5d - b5d

        # Triangle 2
        x61d = -(a+b/2)
        y61d = -(a-b/2)
        x62d = -(a-b/2)
        y62d = -(a-b/2)
        x63d = -(a+b/2)
        y63d = - (a+b/2)
        a6d = ((y62d - y63d)*(mousexpos - x63d) + (x63d - x62d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        b6d = ((y63d - y61d)*(mousexpos - x63d) + (x61d - x63d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        c6d = 1 - a6d - b6d

        # Triangle 1

        x71d = -(a + b/2)
        y71d = a + b/2
        x72d = -(a - b/2)
        y72d = a - b/2
        x73d = -(a + b/2)
        y73d = a - b/2
        a7d = ((y72d - y73d)*(mousexpos - x73d) + (x73d - x72d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        b7d = ((y73d - y71d)*(mousexpos - x73d) + (x71d - x73d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        c7d = 1 - a7d - b7d


        # Triangle 0
        x81d = -(a + b/2)
        y81d = a + b/2
        x82d = -(a - b/2)
        y82d = a + b/2
        x83d = -(a - b/2)
        y83d = a - b/2
        a8d = ((y82d - y83d)*(mousexpos - x83d) + (x83d - x82d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        b8d = ((y83d - y81d)*(mousexpos - x83d) + (x81d - x83d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        c8d = 1 - a8d - b8d

        if (0 <= a1d <= 1) and (0 <= b1d <= 1) and (0 <= c1d <= 1):
            similarity = 7
        elif (0 <= a2d <= 1) and (0 <= b2d <= 1) and (0 <= c2d <= 1):
            similarity = 6
        elif (0 <= a3d <= 1) and (0 <= b3d <= 1) and (0 <= c3d <= 1):
            similarity = 5
        elif (0 <= a4d <= 1) and (0 <= b4d <= 1) and (0 <= c4d <= 1):
            similarity = 4
        elif (0 <= a5d <= 1) and (0 <= b5d <= 1) and (0 <= c5d <= 1):
            similarity = 3
        elif (0 <= a6d <= 1) and (0 <= b6d <= 1) and (0 <= c6d <= 1):
            similarity = 2
        elif (0 <= a7d <= 1) and (0 <= b7d <= 1) and (0 <= c7d <= 1):
            similarity = 1
        elif (0 <= a8d <= 1) and (0 <= b8d <= 1) and (0 <= c8d <= 1):
            similarity = 0

        thisExp.addData("similarity", similarity);
        thisExp.addData("response_time", mouse.mouseClock.getTime())  # Save time relative to start of mouse
        thisExp.addData("Pass", 1)  # Save time relative to start of mouse
        thisExp.addData("trialNumber", trialnumber)  # Save trial number
    ImageComponent response1disk
      image = response67.png
      pos = a,a
      saveStartStop = False
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response3disk
      image = response45.png
      pos = a,-a
      saveStartStop = False
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response5disk
      image = response23.png
      pos = (-a,-a)
      saveStartStop = False
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response7disk
      image = response01.png
      pos = (-a,a)
      saveStartStop = False
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent text_23
      letterHeight = 0.05
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Please rate how similar the two images you just saw are.

        Please click and hold to indicate your choice.
    TextComponent most_similar
      color = yellow
      letterHeight = 0.08
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text = Very similar
      units = norm
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    TextComponent most_different
      color = yellow
      letterHeight = 0.08
      pos = (0.4, 0.4)
      startVal [time (s)] = 0.0
      text = Very different
      units = norm
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    TextComponent Esc_exit_10
      color = aqua
      letterHeight = 0.05
      pos = (0.75, -0.8)
      startVal [time (s)] = 0.0
      text = Press <Esc> to exit experiment
      units = norm
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    CodeComponent enable_mouse
      Code Type = JS
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      Begin JS Routine:
        // Added this snippet to make the mouse visible again
        document.body.style.cursor='auto';
  Routine correct_mouse
    MouseComponent mouse_11
      clickable = center_square
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent response1disk_2
      image = response67.png
      pos = a,a
      saveStartStop = False
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response3disk_2
      image = response45.png
      pos = a,-a
      saveStartStop = False
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response5disk_2
      image = response23.png
      pos = (-a,-a)
      saveStartStop = False
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response7disk_2
      image = response01.png
      pos = (-a,a)
      saveStartStop = False
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent text_51
      color = yellow
      letterHeight = 0.07
      pos = (0, -0.6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please click and hold the yellow square in the middle of the response numbers to continue
      units = norm
      wrapWidth = 1000
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    PolygonComponent center_square
      fillColor = yellow
      lineColor = yellow
      saveStartStop = False
      shape = rectangle
      size = (win_pix_y*0.75/20,win_pix_y*0.75/20)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent most_similar_2
      color = yellow
      letterHeight = 0.08
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text = Very similar
      units = norm
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    TextComponent most_different_2
      color = yellow
      letterHeight = 0.08
      pos = (0.4, 0.4)
      startVal [time (s)] = 0.0
      text = Very different
      units = norm
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    TextComponent trial_text_2
      letterHeight = 0.06
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trial_num_feedback
      units = norm
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    TextComponent Esc_exit_11
      color = aqua
      letterHeight = 0.05
      pos = (0.75, -0.8)
      startVal [time (s)] = 0.0
      text = Press <Esc> to exit experiment
      units = norm
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  Routine begin_task
    MouseComponent mouse_1
      clickable = center_square
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent begin_mouse_center
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = This is the end of the practice trials. Press <space> to begin the main experiment.
      units = norm
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    TextComponent Esc_exit_15
      color = aqua
      letterHeight = 0.05
      pos = (0.75, -0.8)
      startVal [time (s)] = 0.0
      text = Press <Esc> to exit experiment
      units = norm
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    KeyboardComponent space_press_continue_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_of_experiment
    TextComponent thank_you
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        Thank you for your participation! Your responses have been recorded.

        Press <space> to exit experiment
    KeyboardComponent space_exit
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prac_patch_1
    PolygonComponent fixation_cross
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (30, 30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixation_cross_duration
      units = pix
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    ImageComponent practice_patch_1
      image [set every repeat] = $Patch_1_name
      size = (win_pix_y*0.75/3,win_pix_y*0.75/3)
      startVal [time (s)] = $fixation_cross_duration
      stopVal [duration (s)] = $image_duration
      units = pix
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    CodeComponent disable_mouse_3
      Code Type = JS
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      Begin JS Routine:
        // ADDED THIS SNIPPET TO MAKE THE MOUSE INVISIBLE
        document.body.style.cursor='none';
    TextComponent Esc_exit_13
      color = aqua
      letterHeight = 0.05
      pos = (0.75, -0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $exit_message_duration
      text = Press <Esc> to exit experiment
      units = norm
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  Routine prac_patch_2
    PolygonComponent fixation_cross_3
      fillColor = white
      saveStartStop = False
      shape = cross
      size = (30, 30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixation_cross_duration
      units = pix
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    ImageComponent practice_patch_2
      image [set every repeat] = $Patch_2_name
      size = (win_pix_y*0.75/3,win_pix_y*0.75/3)
      startVal [time (s)] = $fixation_cross_duration
      stopVal [duration (s)] = $image_duration
      units = pix
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    TextComponent Esc_exit_12
      color = aqua
      letterHeight = 0.05
      pos = (0.75, -0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $exit_message_duration
      text = Press <Esc> to exit experiment
      units = norm
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  Routine resposne_feedback
    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        if 0 <= similarity <= 1:
            responsefeedback = f'You selected {similarity}'
            responsefeedback1 = f'{similarity} indicates you found the images very similar';

        if 2 <= similarity <= 3:
            responsefeedback = f'You selected {similarity}'
            responsefeedback1 = f'{similarity} indicates you found the images similar';


        if 4 <= similarity  <= 5:
            responsefeedback = f'You selected {similarity}' ;
            responsefeedback1 = f'{similarity} indicates you found the images different';

        if 6 <= similarity  <= 7:
            responsefeedback = f'You selected {similarity}' ;
            responsefeedback1 = f'{similarity} indicates you found the images very different';
    TextComponent text_55
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $response_feedback_time
      text [set every repeat] = $responsefeedback
      units = norm
      wrapWidth = 1000
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    TextComponent text_56
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $response_feedback_time
      text [set every repeat] = $responsefeedback1
      units = norm
      wrapWidth = 1000
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    TextComponent Esc_exit_8
      color = aqua
      letterHeight = 0.05
      pos = (0.75, -0.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $response_feedback_time
      text = Press <Esc> to exit experiment
      units = norm
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  Routine instruction_1
    TextComponent instruction_1_text
      letterHeight = 0.06
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Welcome to our experiment!

        In this experiment, you will see the following images, focus on the perceptual aspects, you will be asked to report how similar these images are to each other.
    ImageComponent all_patches
      image = instructions/all_patches.png
      pos = (0, -0.1)
      size = (0.7, 0.75)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent space_press_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent press_space_continue
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      text = Press <space> to continue
      units = norm
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    TextComponent Esc_exit
      color = aqua
      letterHeight = 0.05
      pos = (0.75, -0.8)
      startVal [time (s)] = 0.0
      text = Press <Esc> to exit experiment
      units = norm
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  Routine instruction_2
    TextComponent instruction_text_2
      letterHeight = 0.06
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        In each trial of this experiment, you are first asked to fixate on the cross appearing in the middle of the screen.

        Then, a small image will appear, which will be quickly masked.

        NOTE: The image will be presented for a slightly shorter time in the actual experiment.
    MovieComponent patch_1_movie
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie [set every repeat] = instructions/instruction_patch_1.mp4
      pos = (0, -0.1)
      size = (0.5,0.68)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent space_press_continue_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent press_space_continue_2
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press <space> to continue
      units = norm
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    TextComponent Esc_exit_2
      color = aqua
      letterHeight = 0.05
      pos = (0.75, -0.8)
      startVal [time (s)] = 0.0
      text = Press <Esc> to exit experiment
      units = norm
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  Routine instruction_3
    TextComponent instruction_text_3
      letterHeight = 0.06
      pos = (0, 0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Then, the cross will appear again, which is followed by a second image and the masks.

        NOTE: The image will be presented for a slightly shorter time in the actual experiment.
    MovieComponent patch_2_movie
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie [set every repeat] = instructions/instruction_patch_2.mp4
      pos = (0, -0.1)
      size = (0.5,0.68)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent space_press_continue_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent press_space_continue_3
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.5)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press <space> to continue
      units = norm
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    TextComponent Esc_exit_3
      color = aqua
      letterHeight = 0.05
      pos = (0.75, -0.8)
      startVal [time (s)] = 0.0
      text = Press <Esc> to exit experiment
      units = norm
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  Routine instruction_4
    TextComponent instruction_text_4
      letterHeight = 0.06
      pos = (0, 0.65)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Finally, a response screen will appear. You are asked to rate how similar the two images you just saw are to each other in perceptual aspects by choosing one of the numbers on the response screen.

        0 =>  most similar
        7 => most different
    TextComponent use_all_numbers
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = NOTE: Some image pairs might be more similar to each other than the other pairs. Therefore, please try to use numbers of the entire scale to express their varying similarity levels. 
      units = norm
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    ImageComponent response_screen_intr
      image = instructions/response screen.png
      pos = (0, -0.15)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent space_press_continue_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent space_continue_low
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text = Press <space> to continue
      units = norm
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    TextComponent Esc_exit_4
      color = aqua
      letterHeight = 0.05
      pos = (0.75, -0.8)
      startVal [time (s)] = 0.0
      text = Press <Esc> to exit experiment
      units = norm
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  Routine instruction_5
    TextComponent instruction_text_5
      letterHeight = 0.06
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      text = After choosing, move your cursor back to the centre and click and hold the yellow square to continue.
      units = norm
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    ImageComponent response_screen_after
      image = instructions/response screen 2.png
      pos = (0, -0.1)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent space_press_continue_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent space_continue_low_2
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      text = Press <space> to continue
      units = norm
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    TextComponent Esc_exit_5
      color = aqua
      letterHeight = 0.05
      pos = (0.75, -0.8)
      startVal [time (s)] = 0.0
      text = Press <Esc> to exit experiment
      units = norm
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  Routine begin_practice
    TextComponent prac_begin_text
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        The entire experiment will take approximately 30 minutes to complete.

        Now, let's become familiar with the experiment task with some practice
    TextComponent prac_begin_space
      color = yellow
      letterHeight = 0.07
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text = Press <space> to begin practice trials
      units = norm
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    KeyboardComponent space_press_continue_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Esc_exit_6
      color = aqua
      letterHeight = 0.05
      pos = (0.75, -0.8)
      startVal [time (s)] = 0.0
      text = Press <Esc> to exit experiment
      units = norm
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  Routine trial_num_break
    TextComponent trial_num_text
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        You have completed 15 of all 30 trials.

        Press <space> to continue with the remaining trials
    KeyboardComponent space_press_continue_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine count_trial_number
    CodeComponent trial_num_count
      Code Type = Auto->JS
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  Routine prac_response
    MouseComponent mouse_2
      clickable = response1disk,response3disk,response5disk,response7disk
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        # Save similarity rating
        mousexpos=mouse.getPos()[0]  # get x position of mouse
        mouseypos=mouse.getPos()[1]  # get y position of mouse

        # Triangle 7
        x11d = a - b/2;
        y11d = a + b/2;
        x12d = a + b/2;
        y12d = a + b/2;
        x13d = a - b/2;
        y13d = a - b/2;
        a1d = ((y12d - y13d)*(mousexpos - x13d) + (x13d - x12d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        b1d = ((y13d - y11d)*(mousexpos - x13d) + (x11d - x13d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        c1d = 1 - a1d - b1d;

        # Triangle 6
        x21d = a - b/2;
        y21d = a - b/2
        x22d = a + b/2
        y22d = a + b/2
        x23d = a + b/2
        y23d = a - b/2
        a2d = ((y22d - y23d)*(mousexpos - x23d) + (x23d - x22d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        b2d = ((y23d - y21d)*(mousexpos - x23d) + (x21d - x23d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        c2d = 1 - a2d - b2d

        # Triangle 5
        x31d = a - b/2
        y31d = -(a - b/2)
        x32d = a + b/2
        y32d = -(a - b/2)
        x33d = a + b/2
        y33d = -(a + b/2)
        a3d = ((y32d - y33d)*(mousexpos - x33d) + (x33d - x32d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        b3d = ((y33d - y31d)*(mousexpos - x33d) + (x31d - x33d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        c3d = 1 - a3d - b3d


        # Triangle 4
        x41d = a - b/2
        y41d = -(a - b/2)
        x42d = a + b/2
        y42d = -(a + b/2)
        x43d = a - b/2
        y43d = -(a + b/2)
        a4d = ((y42d - y43d)*(mousexpos - x43d) + (x43d - x42d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        b4d = ((y43d - y41d)*(mousexpos - x43d) + (x41d - x43d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        c4d = 1 - a4d - b4d

        #  Triangle 3
        x51d = -(a + b/2)
        y51d = -(a + b/2)
        x52d = -(a - b/2)
        y52d = -(a - b/2)
        x53d = -(a - b/2)
        y53d = -(a + b/2)
        a5d = ((y52d - y53d)*(mousexpos - x53d) + (x53d - x52d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        b5d = ((y53d - y51d)*(mousexpos - x53d) + (x51d - x53d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        c5d = 1 - a5d - b5d

        # Triangle 2
        x61d = -(a+b/2)
        y61d = -(a-b/2)
        x62d = -(a-b/2)
        y62d = -(a-b/2)
        x63d = -(a+b/2)
        y63d = - (a+b/2)
        a6d = ((y62d - y63d)*(mousexpos - x63d) + (x63d - x62d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        b6d = ((y63d - y61d)*(mousexpos - x63d) + (x61d - x63d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        c6d = 1 - a6d - b6d

        # Triangle 1

        x71d = -(a + b/2)
        y71d = a + b/2
        x72d = -(a - b/2)
        y72d = a - b/2
        x73d = -(a + b/2)
        y73d = a - b/2
        a7d = ((y72d - y73d)*(mousexpos - x73d) + (x73d - x72d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        b7d = ((y73d - y71d)*(mousexpos - x73d) + (x71d - x73d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        c7d = 1 - a7d - b7d


        # Triangle 0
        x81d = -(a + b/2)
        y81d = a + b/2
        x82d = -(a - b/2)
        y82d = a + b/2
        x83d = -(a - b/2)
        y83d = a - b/2
        a8d = ((y82d - y83d)*(mousexpos - x83d) + (x83d - x82d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        b8d = ((y83d - y81d)*(mousexpos - x83d) + (x81d - x83d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        c8d = 1 - a8d - b8d

        if (0 <= a1d <= 1) and (0 <= b1d <= 1) and (0 <= c1d <= 1):
            similarity = 7
        elif (0 <= a2d <= 1) and (0 <= b2d <= 1) and (0 <= c2d <= 1):
            similarity = 6
        elif (0 <= a3d <= 1) and (0 <= b3d <= 1) and (0 <= c3d <= 1):
            similarity = 5
        elif (0 <= a4d <= 1) and (0 <= b4d <= 1) and (0 <= c4d <= 1):
            similarity = 4
        elif (0 <= a5d <= 1) and (0 <= b5d <= 1) and (0 <= c5d <= 1):
            similarity = 3
        elif (0 <= a6d <= 1) and (0 <= b6d <= 1) and (0 <= c6d <= 1):
            similarity = 2
        elif (0 <= a7d <= 1) and (0 <= b7d <= 1) and (0 <= c7d <= 1):
            similarity = 1
        elif (0 <= a8d <= 1) and (0 <= b8d <= 1) and (0 <= c8d <= 1):
            similarity = 0

        thisExp.addData("similarity", similarity);
        thisExp.addData("response_time", mouse.mouseClock.getTime())  # Save time relative to start of mouse
        thisExp.addData("Pass", 1)  # Save time relative to start of mouse
    ImageComponent response1disk_3
      image = response67.png
      pos = a,a
      saveStartStop = False
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response5disk_3
      image = response23.png
      pos = (-a,-a)
      saveStartStop = False
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response3disk_3
      image = response45.png
      pos = a,-a
      saveStartStop = False
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response7disk_3
      image = response01.png
      pos = (-a,a)
      saveStartStop = False
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent text
      letterHeight = 0.05
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Please rate how similar the two images you just saw are.

        Please click and hold to indicate your choice.
    TextComponent most_similar_3
      color = yellow
      letterHeight = 0.08
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text = Very similar
      units = norm
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    TextComponent most_different_3
      color = yellow
      letterHeight = 0.08
      pos = (0.4, 0.4)
      startVal [time (s)] = 0.0
      text = Very different
      units = norm
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    TextComponent Esc_exit_7
      color = aqua
      letterHeight = 0.05
      pos = (0.75, -0.8)
      startVal [time (s)] = 0.0
      text = Press <Esc> to exit experiment
      units = norm
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    CodeComponent enable_mouse_2
      Code Type = JS
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      Begin JS Routine:
        // Added this snippet to make the mouse visible again
        document.body.style.cursor='auto';
  Routine prac_correct_mouse
    MouseComponent mouse_12
      clickable = center_square
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent response1disk_4
      image = response67.png
      pos = a,a
      saveStartStop = False
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response3disk_4
      image = response45.png
      pos = a,-a
      saveStartStop = False
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response5disk_4
      image = response23.png
      pos = (-a,-a)
      saveStartStop = False
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response7disk_4
      image = response01.png
      pos = (-a,a)
      saveStartStop = False
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent text_52
      color = yellow
      letterHeight = 0.07
      pos = (0, -0.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please click and hold the yellow square in the middle of the response numbers to continue
      units = norm
      wrapWidth = 1000
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    PolygonComponent center_square_2
      fillColor = yellow
      lineColor = yellow
      saveStartStop = False
      shape = rectangle
      size = (win_pix_y*0.75/20,win_pix_y*0.75/20)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent most_similar_4
      color = yellow
      letterHeight = 0.08
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text = Very similar
      units = norm
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    TextComponent most_different_4
      color = yellow
      letterHeight = 0.08
      pos = (0.4, 0.4)
      startVal [time (s)] = 0.0
      text = Very different
      units = norm
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    TextComponent Esc_exit_9
      color = aqua
      letterHeight = 0.05
      pos = (0.75, -0.8)
      startVal [time (s)] = 0.0
      text = Press <Esc> to exit experiment
      units = norm
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  Routine response_2
    MouseComponent mouse_3
      clickable = response1disk,response3disk,response5disk,response7disk
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        # Count trial numbers
        trialnumber =  trialnumber + 1;

        # text for indicating trial number
        trial_num_feedback = f'You have completed {trialnumber} of {alltrials} trials'
      End Routine:
        # Save similarity rating
        mousexpos=mouse.getPos()[0]  # get x position of mouse
        mouseypos=mouse.getPos()[1]  # get y position of mouse

        # Triangle 7
        x11d = a - b/2;
        y11d = a + b/2;
        x12d = a + b/2;
        y12d = a + b/2;
        x13d = a - b/2;
        y13d = a - b/2;
        a1d = ((y12d - y13d)*(mousexpos - x13d) + (x13d - x12d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        b1d = ((y13d - y11d)*(mousexpos - x13d) + (x11d - x13d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        c1d = 1 - a1d - b1d;

        # Triangle 6
        x21d = a - b/2;
        y21d = a - b/2
        x22d = a + b/2
        y22d = a + b/2
        x23d = a + b/2
        y23d = a - b/2
        a2d = ((y22d - y23d)*(mousexpos - x23d) + (x23d - x22d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        b2d = ((y23d - y21d)*(mousexpos - x23d) + (x21d - x23d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        c2d = 1 - a2d - b2d

        # Triangle 5
        x31d = a - b/2
        y31d = -(a - b/2)
        x32d = a + b/2
        y32d = -(a - b/2)
        x33d = a + b/2
        y33d = -(a + b/2)
        a3d = ((y32d - y33d)*(mousexpos - x33d) + (x33d - x32d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        b3d = ((y33d - y31d)*(mousexpos - x33d) + (x31d - x33d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        c3d = 1 - a3d - b3d


        # Triangle 4
        x41d = a - b/2
        y41d = -(a - b/2)
        x42d = a + b/2
        y42d = -(a + b/2)
        x43d = a - b/2
        y43d = -(a + b/2)
        a4d = ((y42d - y43d)*(mousexpos - x43d) + (x43d - x42d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        b4d = ((y43d - y41d)*(mousexpos - x43d) + (x41d - x43d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        c4d = 1 - a4d - b4d

        #  Triangle 3
        x51d = -(a + b/2)
        y51d = -(a + b/2)
        x52d = -(a - b/2)
        y52d = -(a - b/2)
        x53d = -(a - b/2)
        y53d = -(a + b/2)
        a5d = ((y52d - y53d)*(mousexpos - x53d) + (x53d - x52d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        b5d = ((y53d - y51d)*(mousexpos - x53d) + (x51d - x53d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        c5d = 1 - a5d - b5d

        # Triangle 2
        x61d = -(a+b/2)
        y61d = -(a-b/2)
        x62d = -(a-b/2)
        y62d = -(a-b/2)
        x63d = -(a+b/2)
        y63d = - (a+b/2)
        a6d = ((y62d - y63d)*(mousexpos - x63d) + (x63d - x62d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        b6d = ((y63d - y61d)*(mousexpos - x63d) + (x61d - x63d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        c6d = 1 - a6d - b6d

        # Triangle 1

        x71d = -(a + b/2)
        y71d = a + b/2
        x72d = -(a - b/2)
        y72d = a - b/2
        x73d = -(a + b/2)
        y73d = a - b/2
        a7d = ((y72d - y73d)*(mousexpos - x73d) + (x73d - x72d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        b7d = ((y73d - y71d)*(mousexpos - x73d) + (x71d - x73d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        c7d = 1 - a7d - b7d


        # Triangle 0
        x81d = -(a + b/2)
        y81d = a + b/2
        x82d = -(a - b/2)
        y82d = a + b/2
        x83d = -(a - b/2)
        y83d = a - b/2
        a8d = ((y82d - y83d)*(mousexpos - x83d) + (x83d - x82d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        b8d = ((y83d - y81d)*(mousexpos - x83d) + (x81d - x83d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        c8d = 1 - a8d - b8d

        if (0 <= a1d <= 1) and (0 <= b1d <= 1) and (0 <= c1d <= 1):
            similarity = 7
        elif (0 <= a2d <= 1) and (0 <= b2d <= 1) and (0 <= c2d <= 1):
            similarity = 6
        elif (0 <= a3d <= 1) and (0 <= b3d <= 1) and (0 <= c3d <= 1):
            similarity = 5
        elif (0 <= a4d <= 1) and (0 <= b4d <= 1) and (0 <= c4d <= 1):
            similarity = 4
        elif (0 <= a5d <= 1) and (0 <= b5d <= 1) and (0 <= c5d <= 1):
            similarity = 3
        elif (0 <= a6d <= 1) and (0 <= b6d <= 1) and (0 <= c6d <= 1):
            similarity = 2
        elif (0 <= a7d <= 1) and (0 <= b7d <= 1) and (0 <= c7d <= 1):
            similarity = 1
        elif (0 <= a8d <= 1) and (0 <= b8d <= 1) and (0 <= c8d <= 1):
            similarity = 0

        thisExp.addData("similarity", similarity);
        thisExp.addData("response_time", mouse.mouseClock.getTime())  # Save time relative to start of mouse
        thisExp.addData("Pass", 2)  # Save time relative to start of mouse
        thisExp.addData("trialNumber", trialnumber)  # Save trial number
    ImageComponent response1disk_5
      image = response67.png
      pos = a,a
      saveStartStop = False
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response3disk_5
      image = response45.png
      pos = a,-a
      saveStartStop = False
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response5disk_5
      image = response23.png
      pos = (-a,-a)
      saveStartStop = False
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response7disk_5
      image = response01.png
      pos = (-a,a)
      saveStartStop = False
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent text_24
      letterHeight = 0.05
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Please rate how similar the two images you just saw are.

        Please click and hold to indicate your choice.
    TextComponent most_similar_5
      color = yellow
      letterHeight = 0.08
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text = Very similar
      units = norm
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    TextComponent most_different_5
      color = yellow
      letterHeight = 0.08
      pos = (0.4, 0.4)
      startVal [time (s)] = 0.0
      text = Very different
      units = norm
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    TextComponent Esc_exit_18
      color = aqua
      letterHeight = 0.05
      pos = (0.75, -0.8)
      startVal [time (s)] = 0.0
      text = Press <Esc> to exit experiment
      units = norm
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    CodeComponent enable_mouse_3
      Code Type = JS
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      Begin JS Routine:
        // Added this snippet to make the mouse visible again
        document.body.style.cursor='auto';
  Routine Consent
    TextComponent consent_text
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        This is an Informed Consent Form. Please read and understand the statements below.

        1, I understand that my taking part in the study is voluntary and that I am free to leave the study at any time, without giving any reason. I understand that my medical care or legal rights will not be affected in any way.

        2, I agree to the use and release of study-related information about me for the purposes described in this Informed Consent Form.

        3, I agree to the re-use of data collected in this study for future studies in a de-identified manner as described in this Informed Consent form.

        4, I understand that my consent continues until and unless I withdraw my consent that can be done at any time by giving notice to the investigator. I understand that if I withdraw my consent I will not be able to continue to take part in the study.

        5, I understand that if I withdraw consent, the study researchers will no longer use or release information that identifies me in connection with the study unless it is needed to keep the scientific quality of the study. I understand that if I withdraw consent the study researchers may still use any study-related information about me that was collected before I withdrew consent.

        6, I have read and I understand the information provided in this Informed Consent Form. I have had the opportunity to ask questions and have had these questions answered satisfactorily.

        7, I have had time to consider the information provided in this Informed Consent Form to consider answers to my questions, and to consider whether I wish to take part in the study.

        If you understand the statements above, and freely consent to participate in the study, press [Space] to begin the experiment.
    ImageComponent monash_logo
      image = Monash_University_logo.svg.png
      pos = (0,win_pix_y*0.43)
      size = (win_pix_x*0.09,win_pix_y*0.09)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Startup
  Routine StimSetUp
  Routine Consent
  Routine instruction_1
  Routine instruction_2
  Routine instruction_3
  Routine instruction_4
  Routine instruction_5
  Routine begin_practice
  LoopInitiator prac_loop loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = info_exp_prac_cond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Pair_type': 0, 'Image_num': 131, 'Patch_1_loc': 5, 'Patch_2_loc': 5, 'Patch_1_info': 2370, 'Patch_2_info': 2406, 'Patch_1_name': 'prac_patch/patch0002370.jpg', 'Patch_2_name': 'prac_patch/patch0002406.jpg'},
      {'Pair_type': 0, 'Image_num': 131, 'Patch_1_loc': 5, 'Patch_2_loc': 5, 'Patch_1_info': 2514, 'Patch_2_info': 2490, 'Patch_1_name': 'prac_patch/patch0002514.jpg', 'Patch_2_name': 'prac_patch/patch0002490.jpg'},
      {'Pair_type': 0, 'Image_num': 131, 'Patch_1_loc': 5, 'Patch_2_loc': 5, 'Patch_1_info': 2526, 'Patch_2_info': 2526, 'Patch_1_name': 'prac_patch/patch0002526.jpg', 'Patch_2_name': 'prac_patch/patch0002526.jpg'}]
    Routine prac_patch_1
    LoopInitiator prac_mask_loop_1 loopType="TrialHandler"
      Selected rows = 0:5
      conditionsFile = masks_cond.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'mask_name': 'masks/mask_001.jpg'},
        {'mask_name': 'masks/mask_002.jpg'},
        {'mask_name': 'masks/mask_003.jpg'},
        {'mask_name': 'masks/mask_004.jpg'},
        {'mask_name': 'masks/mask_005.jpg'}]
      Routine mask
    LoopTerminator prac_mask_loop_1
    Routine prac_patch_2
    LoopInitiator prac_mask_loop_2 loopType="TrialHandler"
      Selected rows = 0:5
      conditionsFile = masks_cond.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'mask_name': 'masks/mask_001.jpg'},
        {'mask_name': 'masks/mask_002.jpg'},
        {'mask_name': 'masks/mask_003.jpg'},
        {'mask_name': 'masks/mask_004.jpg'},
        {'mask_name': 'masks/mask_005.jpg'}]
      Routine mask
    LoopTerminator prac_mask_loop_2
    Routine prac_response
    Routine resposne_feedback
    Routine prac_correct_mouse
  LoopTerminator prac_loop
  Routine begin_task
  LoopInitiator first_pass_loop loopType="TrialHandler"
    Selected rows = 0:120
    conditionsFile = info_exp_patch_3_cond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Pair_type': 0, 'Image_num': 131, 'Patch_1_loc': 5, 'Patch_2_loc': 5, 'Patch_1_info': 2175, 'Patch_2_info': 2175, 'Patch_1_name': 'absent_patch/patch0002175.jpg', 'Patch_2_name': 'absent_patch/patch0002175.jpg'},
      {'Pair_type': 0, 'Image_num': 131, 'Patch_1_loc': 5, 'Patch_2_loc': 5, 'Patch_1_info': 1947, 'Patch_2_info': 2271, 'Patch_1_name': 'absent_patch/patch0001947.jpg', 'Patch_2_name': 'absent_patch/patch0002271.jpg'},
      {'Pair_type': 1, 'Image_num': 131, 'Patch_1_loc': 5, 'Patch_2_loc': 5, 'Patch_1_info': 1, 'Patch_2_info': 1947, 'Patch_1_name': 'present_patch/cong_131_3_a.jpg', 'Patch_2_name': 'absent_patch/patch0001947.jpg'},
      {'Pair_type': 0, 'Image_num': 131, 'Patch_1_loc': 5, 'Patch_2_loc': 5, 'Patch_1_info': 2031, 'Patch_2_info': 2367, 'Patch_1_name': 'absent_patch/patch0002031.jpg', 'Patch_2_name': 'absent_patch/patch0002367.jpg'},
      {'Pair_type': 0, 'Image_num': 131, 'Patch_1_loc': 5, 'Patch_2_loc': 5, 'Patch_1_info': 2223, 'Patch_2_info': 1995, 'Patch_1_name': 'absent_patch/patch0002223.jpg', 'Patch_2_name': 'absent_patch/patch0001995.jpg'},
      {'Pair_type': 0, 'Image_num': 131, 'Patch_1_loc': 5, 'Patch_2_loc': 5, 'Patch_1_info': 2043, 'Patch_2_info': 2283, 'Patch_1_name': 'absent_patch/patch0002043.jpg', 'Patch_2_name': 'absent_patch/patch0002283.jpg'},
      {'Pair_type': 0, 'Image_num': 131, 'Patch_1_loc': 5, 'Patch_2_loc': 5, 'Patch_1_info': 2211, 'Patch_2_info': 2283, 'Patch_1_name': 'absent_patch/patch0002211.jpg', 'Patch_2_name': 'absent_patch/patch0002283.jpg'}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
    Routine patch_1
    LoopInitiator mask_loop loopType="TrialHandler"
      Selected rows = 0:5
      conditionsFile = masks_cond.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'mask_name': 'masks/mask_001.jpg'},
        {'mask_name': 'masks/mask_002.jpg'},
        {'mask_name': 'masks/mask_003.jpg'},
        {'mask_name': 'masks/mask_004.jpg'},
        {'mask_name': 'masks/mask_005.jpg'}]
      Routine mask
    LoopTerminator mask_loop
    Routine patch_2
    LoopInitiator mask_loop_2 loopType="TrialHandler"
      Selected rows = 0:5
      conditionsFile = masks_cond.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'mask_name': 'masks/mask_001.jpg'},
        {'mask_name': 'masks/mask_002.jpg'},
        {'mask_name': 'masks/mask_003.jpg'},
        {'mask_name': 'masks/mask_004.jpg'},
        {'mask_name': 'masks/mask_005.jpg'}]
      Routine mask
    LoopTerminator mask_loop_2
    Routine response
    Routine correct_mouse
  LoopTerminator first_pass_loop
  LoopInitiator double_pass_loop loopType="TrialHandler"
    Selected rows = 0:120
    conditionsFile = info_exp_patch_3_cond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Pair_type': 0, 'Image_num': 131, 'Patch_1_loc': 5, 'Patch_2_loc': 5, 'Patch_1_info': 2175, 'Patch_2_info': 2175, 'Patch_1_name': 'absent_patch/patch0002175.jpg', 'Patch_2_name': 'absent_patch/patch0002175.jpg'},
      {'Pair_type': 0, 'Image_num': 131, 'Patch_1_loc': 5, 'Patch_2_loc': 5, 'Patch_1_info': 1947, 'Patch_2_info': 2271, 'Patch_1_name': 'absent_patch/patch0001947.jpg', 'Patch_2_name': 'absent_patch/patch0002271.jpg'},
      {'Pair_type': 1, 'Image_num': 131, 'Patch_1_loc': 5, 'Patch_2_loc': 5, 'Patch_1_info': 1, 'Patch_2_info': 1947, 'Patch_1_name': 'present_patch/cong_131_3_a.jpg', 'Patch_2_name': 'absent_patch/patch0001947.jpg'},
      {'Pair_type': 0, 'Image_num': 131, 'Patch_1_loc': 5, 'Patch_2_loc': 5, 'Patch_1_info': 2031, 'Patch_2_info': 2367, 'Patch_1_name': 'absent_patch/patch0002031.jpg', 'Patch_2_name': 'absent_patch/patch0002367.jpg'},
      {'Pair_type': 0, 'Image_num': 131, 'Patch_1_loc': 5, 'Patch_2_loc': 5, 'Patch_1_info': 2223, 'Patch_2_info': 1995, 'Patch_1_name': 'absent_patch/patch0002223.jpg', 'Patch_2_name': 'absent_patch/patch0001995.jpg'},
      {'Pair_type': 0, 'Image_num': 131, 'Patch_1_loc': 5, 'Patch_2_loc': 5, 'Patch_1_info': 2043, 'Patch_2_info': 2283, 'Patch_1_name': 'absent_patch/patch0002043.jpg', 'Patch_2_name': 'absent_patch/patch0002283.jpg'},
      {'Pair_type': 0, 'Image_num': 131, 'Patch_1_loc': 5, 'Patch_2_loc': 5, 'Patch_1_info': 2211, 'Patch_2_info': 2283, 'Patch_1_name': 'absent_patch/patch0002211.jpg', 'Patch_2_name': 'absent_patch/patch0002283.jpg'}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
    Routine patch_2
    LoopInitiator mask_loop_3 loopType="TrialHandler"
      Selected rows = 0:5
      conditionsFile = masks_cond.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'mask_name': 'masks/mask_001.jpg'},
        {'mask_name': 'masks/mask_002.jpg'},
        {'mask_name': 'masks/mask_003.jpg'},
        {'mask_name': 'masks/mask_004.jpg'},
        {'mask_name': 'masks/mask_005.jpg'}]
      Routine mask
    LoopTerminator mask_loop_3
    Routine patch_1
    LoopInitiator mask_loop_4 loopType="TrialHandler"
      Selected rows = 0:5
      conditionsFile = masks_cond.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'mask_name': 'masks/mask_001.jpg'},
        {'mask_name': 'masks/mask_002.jpg'},
        {'mask_name': 'masks/mask_003.jpg'},
        {'mask_name': 'masks/mask_004.jpg'},
        {'mask_name': 'masks/mask_005.jpg'}]
      Routine mask
    LoopTerminator mask_loop_4
    Routine response_2
    Routine correct_mouse
  LoopTerminator double_pass_loop
  Routine end_of_experiment
